<MorpheusModel version="4">
    <Description>
        <Title>Example-PCP</Title>
        <Details>Planar Cell Polarity (PCP)</Details>
    </Description>
    <Global>
        <Field value="0" symbol="x">
            <Diffusion rate="0.0"/>
        </Field>
        <Constant value="0.0" symbol="A"/>
        <Constant value="0.0" symbol="C"/>
        <ConstantVector value="0.0, 0.0, 0.0" symbol="polC"/>
        <Constant value="0.25" symbol="orientation"/>
    </Global>
    <Space>
        <Lattice class="hexagonal">
            <Size value="182,182,0" symbol="size"/>
            <BoundaryConditions>
                <Condition boundary="x" type="periodic"/>
                <Condition boundary="y" type="periodic"/>
            </BoundaryConditions>
            <NodeLength value="5"/>
            <Neighborhood>
                <Order>1</Order>
            </Neighborhood>
        </Lattice>
        <SpaceSymbol symbol="l"/>
        <MembraneLattice>
            <Resolution value="24" symbol="memsize"/>
            <SpaceSymbol symbol="m"/>
        </MembraneLattice>
    </Space>
    <Time>
        <StartTime value="0"/>
        <StopTime value="2500"/>
        <RandomSeed value="0"/>
        <TimeSymbol symbol="t"/>
    </Time>
    <CellTypes>
        <CellType class="biological" name="cells">
            <MembraneProperty value="1" symbol="A">
                <!--    <Disabled>
        <Diffusion rate="200"/>
    </Disabled>
-->
                <Diffusion rate="0" well-mixed="true"/>
            </MembraneProperty>
            <MembraneProperty value="0" symbol="C">
                <Diffusion rate="7.5"/>
                <!--    <Disabled>
        <Diffusion rate="0" well-mixed="true"/>
    </Disabled>
-->
            </MembraneProperty>
            <MembraneProperty value="0" name="C_nb" symbol="c">
                <Diffusion rate="0"/>
            </MembraneProperty>
            <System solver="Runge-Kutta [fixed, O(4)]" time-step="1">
                <Constant value="0.1" name="decay" symbol="d"/>
                <Constant value="1" name="cell-cell coupling" symbol="h"/>
                <Constant value="0.01" name="base activation" symbol="b"/>
                <DiffEqn symbol-ref="A">
                    <Expression>-F</Expression>
                </DiffEqn>
                <DiffEqn symbol-ref="C">
                    <Expression>F</Expression>
                </DiffEqn>
                <!--    <Disabled>
        <Function symbol="F">
            <Expression>A*(((C^2/(1+C^2)) / (1+h*c^2)) + b) - d*C
</Expression>
        </Function>
    </Disabled>
-->
                <Intermediate value="A*(((C^2/(1+C^2)) / (1+h*c^2)) + b) - d*C" symbol="F"/>
            </System>
            <PropertyVector value="0.0, 0.0, 0.0" symbol="polC"/>
            <NeighborhoodReporter>
                <Input value="C" scaling="length"/>
                <Output symbol-ref="c" mapping="average"/>
            </NeighborhoodReporter>
            <Property value="0.2" symbol="orientation"/>
            <Property value="0" symbol="sumC"/>
            <Mapper>
                <Input value="C"/>
                <Polarity symbol-ref="polC"/>
            </Mapper>
            <Mapper>
                <Input value="C"/>
                <Output symbol-ref="sumC" mapping="sum"/>
            </Mapper>
        </CellType>
        <CellType class="medium" name="medium"/>
    </CellTypes>
    <CellPopulations>
        <Population size="0" type="cells">
            <InitProperty symbol-ref="C">
                <!--    <Disabled>
        <Expression>rand_norm(2,0.05)
</Expression>
    </Disabled>
-->
                <!--    <Disabled>
        <Expression>sin(m.phi + (orientation+0.5)*pi)+1</Expression>
    </Disabled>
-->
                <Expression>if(cell.id == 76, 
   sin(m.phi + (orientation+0.5)*pi)+1,
   1)</Expression>
                <!--    <Disabled>
        <Expression>if( sqrt((cell.center.x-size.x/2)^2 + (cell.center.y-size.y/2)^2) > 32, 
   sin(m.phi + (orientation+0.5)*pi)+1,
   1)</Expression>
    </Disabled>
-->
            </InitProperty>
            <InitHexLattice/>
        </Population>
    </CellPopulations>
    <Analysis>
        <Gnuplotter time-step="100" decorate="false">
            <Terminal name="png"/>
            <Plot>
                <Cells value="C">
                    <ColorMap>
                        <Color value="8" color="red"/>
                        <Color value="2" color="yellow"/>
                        <Color value="0.0" color="white"/>
                    </ColorMap>
                </Cells>
                <CellArrows orientation="polC * 3.0"/>
            </Plot>
        </Gnuplotter>
        <Gnuplotter time-step="100" decorate="true">
            <Terminal name="png"/>
            <Plot>
                <Cells max="6.28" value="polC.phi" min="0.0">
                    <ColorMap>
                        <Color value="5.4" color="red"/>
                        <Color value="4.5" color="magenta"/>
                        <Color value="3.6" color="blue"/>
                        <Color value="2.7" color="cyan"/>
                        <Color value="1.8" color="green"/>
                        <Color value="0.9" color="yellow"/>
                        <Color value="0.0" color="red"/>
                    </ColorMap>
                </Cells>
            </Plot>
        </Gnuplotter>
        <ContactLogger time-step="100" celltype-from="cells"/>
        <HistogramLogger minimum="0.0" time-step="250" normalized="false" number-of-bins="36" maximum="6.28">
            <Column celltype="cells" symbol-ref="polC.phi"/>
            <Plot minimum="0.0" terminal="png"/>
        </HistogramLogger>
        <DependencyGraph format="svg" reduced="false" include-tags="#untagged"/>
    </Analysis>
</MorpheusModel>
