<?xml version='1.0' encoding='UTF-8'?>
<MorpheusModel version="1">
    <Description>
        <Title>Example-CellCycle</Title>
        <Details>James Ferrell, Tony Yu-Chen Tsai and Qiong Yang (2011) Modeling the Cell Cycle: Why Do Certain Circuits Oscillate?, Cell 144, p874-885. http://dx.doi.org/10.1016/j.cell.2011.03.006</Details>
    </Description>
    <Global>
        <Variable symbol="APC" value="0.0"/>
        <Variable symbol="Plk1" value="0.0"/>
        <Variable symbol="CDK1" value="0.0"/>
    </Global>
    <Space>
        <Lattice class="square">
            <Size symbol="size" value="1,1,0"/>
        </Lattice>
        <SpaceSymbol symbol="space"/>
    </Space>
    <Time>
        <StartTime value="0"/>
        <StopTime value="25"/>
        <TimeSymbol symbol="time"/>
    </Time>
    <CellTypes>
        <CellType class="biological" name="cells">
            <Property symbol="APC" value="0"/>
            <Property symbol="Plk1" value="0"/>
            <Property symbol="CDK1" value="0"/>
            <System solver="runge-kutta" time-scaling="1" time-step="1e-2">
                <Constant symbol="n" value="8"/>
                <Constant symbol="K" value="0.5"/>
                <Constant symbol="α1" value="0.1"/>
                <Constant symbol="α2" value="3.0"/>
                <Constant symbol="α3" value="3.0"/>
                <Constant symbol="β1" value="3.0"/>
                <Constant symbol="β2" value="1.0"/>
                <Constant symbol="β3" value="1.0"/>
                <DiffEqn symbol-ref="CDK1">
                    <Expression>α1 - β1 * CDK1 * (APC^n) / (K^n + APC^n)</Expression>
                </DiffEqn>
                <DiffEqn symbol-ref="Plk1">
                    <Expression>α2*(1-Plk1) * ((CDK1^n) / (K^n + CDK1^n)) - β2*Plk1</Expression>
                </DiffEqn>
                <DiffEqn symbol-ref="APC">
                    <Expression>α3*(1- APC) * ((Plk1^n) / (K^n + Plk1^n)) - β3*APC</Expression>
                </DiffEqn>
            </System>
        </CellType>
    </CellTypes>
    <CellPopulations>
        <Population size="0" type="cells">
            <InitCellLattice/>
        </Population>
    </CellPopulations>
    <Analysis>
        <Logger time-step="1e-2">
            <Input>
                <Symbol symbol-ref="APC"/>
                <Symbol symbol-ref="CDK1"/>
                <Symbol symbol-ref="Plk1"/>
            </Input>
            <Output>
                <TextOutput file-format="csv"/>
            </Output>
            <Plots>
                <Plot time-step="-1">
                    <Style style="lines" line-width="4.0"/>
                    <Terminal terminal="png"/>
                    <X-axis>
                        <Symbol symbol-ref="time"/>
                    </X-axis>
                    <Y-axis>
                        <Symbol symbol-ref="APC"/>
                        <Symbol symbol-ref="CDK1"/>
                        <Symbol symbol-ref="Plk1"/>
                    </Y-axis>
                </Plot>
                <Plot time-step="-1">
                    <Style style="lines" line-width="4.0"/>
                    <Terminal terminal="png"/>
                    <X-axis>
                        <Symbol symbol-ref="CDK1"/>
                    </X-axis>
                    <Y-axis>
                        <Symbol symbol-ref="APC"/>
                    </Y-axis>
                    <Color-bar>
                        <Symbol symbol-ref="Plk1"/>
                    </Color-bar>
                </Plot>
            </Plots>
        </Logger>
    </Analysis>
</MorpheusModel>
